---
API: 3
OpenSesame: 4.0.24
Platform: nt
---
set width 1024
set title "Avaliação tDCS"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend osweb
set round_decimals 2
set mouse_backend osweb
set keyboard_backend osweb
set height 768
set fullscreen no
set form_clicks no
set foreground "#ffffff"
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:/Users/Miriam/Downloads"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend osweb
set clock_backend osweb
set canvas_backend osweb
set background "#ffffff"

define sketchpad bemvindo
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#5500ff" font_bold=no font_family=serif font_italic=no font_size=50 html=yes show_if=True text="Bem-vindos" x=0.0 y=-200.0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=True text="Clique na tecla espaço para continuar" x=10 y=349 z_index=0
	draw image center=1 file="Imagem WhatsApp 2025-06-23 às 11.26.08_bb8fc068.jpg" scale=0.4 show_if=True x=0.0 y=74.0 z_index=0

define sketchpad estimulo_sketchpad
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=True text="[palavra]" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run bemvindo True
	run instrucoes_sketchpad True
	run new_keyboard_response True
	run new_loop True
	run fim_sketchpad True

define sketchpad fim_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#5500ff" font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=True text="Obrigada pela sua participação!" x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="Clique na tecla espaço para sair" x=0 y=352 z_index=0

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad instrucoes_sketchpad
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=31 html=yes show_if=True text="Agora vão ser mostradas palavras<br />no centro da tela.<br />Clique espaço se a palavra for neutra <br />e Q se a palavra for positiva, e P se a palavra<br />for negativa.<br />Tente responder o mais<br />rápido que conseguir." x=-5.0 y=3.0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=True text="Clique na tecla espaço para continuar" x=0 y=352 z_index=0

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "space;p;q"

define keyboard_response new_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes

define loop new_loop
	set source table
	set repeat 3
	set order random
	set description "Repeatedly runs another item"
	set cycles 15
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 palavra alegria
	setcycle 0 tipo positiva
	setcycle 1 palavra amor
	setcycle 1 tipo positiva
	setcycle 2 palavra festas
	setcycle 2 tipo positiva
	setcycle 3 palavra amizade
	setcycle 3 tipo positiva
	setcycle 4 palavra "esperança"
	setcycle 4 tipo positiva
	setcycle 5 palavra casa
	setcycle 5 tipo neutra
	setcycle 6 palavra janela
	setcycle 6 tipo neutra
	setcycle 7 palavra livro
	setcycle 7 tipo neutra
	setcycle 8 palavra mesa
	setcycle 8 tipo neutra
	setcycle 9 palavra dia
	setcycle 9 tipo neutra
	setcycle 10 palavra tristeza
	setcycle 10 tipo negativa
	setcycle 11 palavra "ódio"
	setcycle 11 tipo negativa
	setcycle 12 palavra medo
	setcycle 12 tipo negativa
	setcycle 13 palavra culpa
	setcycle 13 tipo negativa
	setcycle 14 palavra saudade
	setcycle 14 tipo negativa
	run new_sequence

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run estimulo_sketchpad True
	run keyboard_response True
	run new_logger True

